PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Memory Experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to our experiment
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyTrial
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    TextComponent textStudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stim_words
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  Routine testInstructions
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    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get ready for the test
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    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testTrial
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    TextComponent textTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_words
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    KeyboardComponent keyTest
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endScreen
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating in this study
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    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine welcomeScreen
  LoopInitiator trialsStudy loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_words': 'computer'},
      {'stim_words': 'hill'},
      {'stim_words': 'green'},
      {'stim_words': 'mountain'},
      {'stim_words': 'machine'},
      {'stim_words': 'triangle'},
      {'stim_words': 'fish'},
      {'stim_words': 'classroom'},
      {'stim_words': 'teacher'},
      {'stim_words': 'university'},
      {'stim_words': 'zebra'},
      {'stim_words': 'iphone'},
      {'stim_words': 'coffee'},
      {'stim_words': 'Maldives'},
      {'stim_words': 'creatures'}]
    Routine studyTrial
  LoopTerminator trialsStudy
  Routine testInstructions
  LoopInitiator trialsTest loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_words': 'computer'},
      {'stim_words': 'hill'},
      {'stim_words': 'green'},
      {'stim_words': 'mountain'},
      {'stim_words': 'machine'},
      {'stim_words': 'triangle'},
      {'stim_words': 'apple'},
      {'stim_words': 'button'},
      {'stim_words': 'country'},
      {'stim_words': 'coffee'},
      {'stim_words': 'tea'},
      {'stim_words': 'rose'},
      {'stim_words': 'university'},
      {'stim_words': 'Maldives'},
      {'stim_words': 'shampoo'},
      {'stim_words': 'lion'},
      {'stim_words': 'penguine'},
      {'stim_words': 'samsung'},
      {'stim_words': 'teacher'}]
    Routine testTrial
  LoopTerminator trialsTest
  Routine endScreen
