PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = WORD PRIMING
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar" , "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SHEET 1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = SHEET 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'l_pt_p', 'Reference': 'Laptop', 'old_new': 'old'},
      {'test_words': '_ha_t', 'Reference': 'Chart', 'old_new': 'old'},
      {'test_words': 't_hi_t', 'Reference': 'Tshirts', 'old_new': 'old'},
      {'test_words': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_words': 'p_as_tr_', 'Reference': 'pastry', 'old_new': 'old'},
      {'test_words': 'c_s_', 'Reference': 'case', 'old_new': 'old'},
      {'test_words': '_ru_is', 'Reference': 'cruise', 'old_new': 'pld'},
      {'test_words': 'p_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test_words': 'k_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test_words': 'p_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test_words': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test_words': '_a_bl_', 'Reference': 'marble', 'old_new': 'old'},
      {'test_words': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test_words': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test_words': 'c_s_io_', 'Reference': 'cushion', 'old_new': 'old'},
      {'test_words': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test_words': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test_words': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test_words': 'bo_t_e', 'Reference': 'bottle', 'old_new': 'new'},
      {'test_words': None, 'Reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
